//Microscopy pictures were processed with Triangle method in Fiji

// This part of the macro creates a loop for processing multiple files in the given directories
dir1 = getDirectory("Source Directory ");
dir2 = getDirectory("Destination Directory ");
list = getFileList(dir1);
setBatchMode(true);
for (i=0; i<list.length; i++) {
	showProgress(i+1, list.length);
	
	run("Bio-Formats Importer", 
	"open=["+ dir1 + list[i] +"] autoscale color_mode=Default open_all_series rois_import=[ROI manager] view=Hyperstack stack_order=XYCZT"); //Import .czi-files
	
	name = getTitleStripExtension();

run("Next Slice [>]");	
makeOval(102, 106, 1299, 1267);
run("Crop");

setAutoThreshold("Triangle dark");

run("Analyze Particles...", "size=800000-Infinity show=[Overlay Masks] display exclude include overlay slice");

//Save as .jpeg
	    while(nImages > 0){
    	title = getTitle;
    	saveAs("jpeg", dir2+title);
    	close();
    }
}

//File extension strip function.
// Returns the title without the extension - Thanks Mark, very cool.
//====================================
function getTitleStripExtension() {
  t = getTitle();
  t = replace(t, ".tif", "");        
  t = replace(t, ".tiff", "");      
  t = replace(t, ".lif", "");      
  t = replace(t, ".lsm", "");    
  t = replace(t, ".czi", "");      
  t = replace(t, ".nd2", "");    
  return t;
}

	selectWindow("Results");
	saveAs("txt", dir2 + File.separator + "Measurements.tsv");
